CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^0(?P<WellRow>\d{2})0(?P<WellColumn>\d{2})-(?P<WellField>\d{1})-0010010(?P<ChannelNumber>\d{2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:1
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "02")
    Name to assign these images:TMRM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:///F:/IllumMMP300gaussian.npy   
    Name to assign this image:IllumTMRM
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:TMRM
    Name the output image:CorrTMRM
    Select the illumination function:IllumTMRM
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:6|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
    Select the type of image to save:Image
    Select the image to save:CorrTMRM
    Select method for constructing file names:From image filename
    Select image name for file prefix:TMRM
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\g<Well>
    Saved file format:tiff
    Output file location:Elsewhere...|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
