CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^0(?P<WellRow>\d{2})0(?P<WellColumn>\d{2})-(?P<WellField>\d{1})-0010010(?P<ChannelNumber>\d{2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "01")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "02")
    Name to assign these images:TMRM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:300
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:TMRM
    Name the output image:IllumTMRM
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:300
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:IllumTMRM
    Select method for constructing file names:Single name
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    Enter single file name:IllumMMP300gaussian
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    Saved file format:npy
    Output file location:Elsewhere...|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:IllumDNA
    Select method for constructing file names:Single name
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    Enter single file name:IllumDNAP300gaussian
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    Saved file format:npy
    Output file location:Elsewhere...|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
