CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^0(?P<WellRow>\d{2})0(?P<WellColumn>\d{2})-(?P<WellField>\d{1})-0010010(?P<ChannelNumber>\d{2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "01")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "02")
    Name to assign these images:TMRM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,35
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.004,0.01
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:10
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:TMRM
    Name the primary objects to be identified:TMRM
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:5
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.005,0.05
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DNA
    Number of pixels by which to expand the primary objects:25
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
RelateObjects:[module_num:8|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
    Parent objects:Cells
    Child objects:TMRM
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureImageAreaOccupied:[module_num:9|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Cells, Nuclei, TMRM

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:DNA, TMRM
    Select objects to measure:Cells, Nuclei, TMRM

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:Cells, Nuclei, TMRM
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:TMRM|Intensity_MedianIntensity_DNA,TMRM|Intensity_MedianIntensity_TMRM,TMRM|Intensity_IntegratedIntensityEdge_DNA,TMRM|Intensity_IntegratedIntensityEdge_TMRM,TMRM|Intensity_MeanIntensity_DNA,TMRM|Intensity_MeanIntensity_TMRM,TMRM|Intensity_IntegratedIntensity_DNA,TMRM|Intensity_IntegratedIntensity_TMRM,TMRM|Intensity_MeanIntensityEdge_TMRM,TMRM|Intensity_MeanIntensityEdge_DNA,TMRM|Intensity_MaxIntensity_TMRM,TMRM|Intensity_MaxIntensity_DNA,TMRM|Intensity_UpperQuartileIntensity_DNA,TMRM|Intensity_UpperQuartileIntensity_TMRM,TMRM|Intensity_MaxIntensityEdge_TMRM,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Example_MMP_DMSO_F+AA
    Overwrite existing files without warning?:No
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